PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = IOWA_Gambling_Task_incase
  keyboardBackend = ioHub
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Routines
  Routine defining_variables
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random

        card_width = 0.3
        card_height = 0.5
        position_y = 0.05
        label_y = -0.25
        condition = "insufficient_time"
        positions = [(-0.6, position_y), (-0.2, position_y), (0.2, position_y), (0.6, position_y)]
      Begin Experiment:
        total = 2000
        gamble_result_text = ""
        consequences = {
            "deck_A": {
                "reward": 100,
                "loss": 125,
                "loss_weight": 0.5,
            },
            "deck_B": {
                "reward": 100,
                "loss": 1250,
                "loss_weight": 0.1,
            },
            "deck_C": {
                "reward": 50,
                "loss": 25,
                "loss_weight": 0.5,
            },
            "deck_D": {
                "reward": 50,
                "loss": 250,
                "loss_weight": 0.1,
            },
        }
        selected_deck = ""
        random_val = 0
  Routine Task
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    CodeComponent task_code
      Code Type = Auto->JS
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      Begin Routine:
        reward = ""
        loss = ""
      End Routine:
        selected_deck = mouse.clicked_name[0]

        thisExp.addData("condition", condition)
        if selected_deck == "deck_A":
            reward = 100
            loss = deck_A_loss
            if loss == 0:
                total = total + reward
                gamble_result_text = f"You won ${reward}"
            else:
                total = total + reward
                total = total - loss
                gamble_result_text = f"You won ${reward} and lost ${loss}"
        elif selected_deck == "deck_B":
            reward = 100
            loss = deck_B_loss
            if loss == 0:
                total = total + reward
                gamble_result_text = f"You won ${reward}"
            else:
                total = total + reward
                total = total - loss
                gamble_result_text = f"You won ${reward} and lost ${loss}"
        elif selected_deck == "deck_C":
            reward = 50
            loss = deck_C_loss
            if loss == 0:
                total = total + reward
                gamble_result_text = f"You won ${reward}"
            else:
                total = total + reward
                total = total - loss
                gamble_result_text = f"You won ${reward} and lost ${loss}"
        elif selected_deck == "deck_D":
            reward = 50
            loss = deck_D_loss
            if loss == 0:
                total = total + reward
                gamble_result_text = f"You won ${reward}"
            else:
                total = total + reward
                total = total - loss
                gamble_result_text = f"You won ${reward} and lost ${loss}"
        else:
            gamble_result_text = selected_deck

        thisExp.addData("reward", reward)
        thisExp.addData("loss", loss)
        thisExp.addData("total", total)
    TextComponent current_total
      letterHeight = 0.05
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $"Current Total : $" + str(total)
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    ImageComponent deck_A
      image = deck_image.png
      pos = positions[0]
      size = (card_width, card_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent deck_B
      image = deck_image.png
      pos = positions[1]
      size = (card_width, card_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent deck_C
      image = deck_image.png
      pos = positions[2]
      size = (card_width, card_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent deck_D
      image = deck_image.png
      pos = positions[3]
      size = (card_width, card_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent deck_A_label
      letterHeight = 0.05
      pos = (positions[0][0], label_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Deck A
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    TextComponent deck_B_label
      letterHeight = 0.05
      pos = (positions[1][0], label_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Deck B
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    TextComponent deck_C_label
      letterHeight = 0.05
      pos = (positions[2][0], label_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Deck C
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    TextComponent deck_D_label
      letterHeight = 0.05
      pos = (positions[3][0], label_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Deck D
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    MouseComponent mouse
      clickable = [deck_A, deck_B, deck_C, deck_D]
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine gamble_result
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $gamble_result_text
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  Routine affect_manipulation
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    MovieComponent movie
      backend = ffpyplayer
      disabled = True
      forceEndRoutine = True
      movie [set every repeat] = $video
      size = (1.0, 0.5)
      startVal [time (s)] = 0.0
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  Routine countdown
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    TextComponent text_countdown
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $"The task begins in" + "\n" + str(10-int(t))
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  Routine Instructions
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In this game, you will be given four decks and 2000 dollars to gamble with. The deck you choose will get you some reward or some loss, based on the deck you choose you have to maximise the amount of money you make by the end of the game.

        press 'spacebar' to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine video_norm
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Watch this short movie before staring the game.

        Press the spacebar to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine time_instructions
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    TextComponent text_norm_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Every time you get a choice, you will have 4 seconds to respond which is tyically insufficient to learn and complete the task.

        press 'spacebar' to continue
    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine thank_you
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    TextComponent text_norm_4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participanting :)
      units = norm
      wrapWidth = 1.8
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    CodeComponent text_align_4
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine fixation
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine defining_variables
  Routine Instructions
  Routine time_instructions
  Routine countdown
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = fullRandom
    nReps = 10
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = gambling.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'deck_A_loss': 250, 'deck_B_loss': 1250, 'deck_C_loss': 50, 'deck_D_loss': 250},
        {'deck_A_loss': 250, 'deck_B_loss': 0, 'deck_C_loss': 50, 'deck_D_loss': 0},
        {'deck_A_loss': 250, 'deck_B_loss': 0, 'deck_C_loss': 50, 'deck_D_loss': 0},
        {'deck_A_loss': 250, 'deck_B_loss': 0, 'deck_C_loss': 50, 'deck_D_loss': 0},
        {'deck_A_loss': 250, 'deck_B_loss': 0, 'deck_C_loss': 50, 'deck_D_loss': 0},
        {'deck_A_loss': 0, 'deck_B_loss': 0, 'deck_C_loss': 0, 'deck_D_loss': 0},
        {'deck_A_loss': 0, 'deck_B_loss': 0, 'deck_C_loss': 0, 'deck_D_loss': 0},
        {'deck_A_loss': 0, 'deck_B_loss': 0, 'deck_C_loss': 0, 'deck_D_loss': 0},
        {'deck_A_loss': 0, 'deck_B_loss': 0, 'deck_C_loss': 0, 'deck_D_loss': 0},
        {'deck_A_loss': 0, 'deck_B_loss': 0, 'deck_C_loss': 0, 'deck_D_loss': 0}]
      Routine fixation
      Routine Task
      Routine gamble_result
    LoopTerminator trials
  LoopTerminator trials_2
  Routine thank_you
